CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:68
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Mouse>.*)_(?P<Slide>.*)_(?P<region>.*)_(?P<Probe>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:7
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "OLIG2")
    Name to assign these images:Olig2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "SLC1A3")
    Name to assign these images:Slc1a3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "SLC17A6")
    Name to assign these images:Slc17a6
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "SLC17A7")
    Name to assign these images:Slc17a7
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GAD2")
    Name to assign these images:Gad2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "mask")
    Name to assign these images:Mask
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DAPI
    Name the output image:Rescale_DAPI
    Rescaling method:Stretch each image to use the full intensity range
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
Smooth:[module_num:6|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
    Select the input image:Rescale_DAPI
    Name the output image:Smooth_DAPI
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Smooth_DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):6,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.85
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the output objects:ExpandedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
MaskObjects:[module_num:9|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
    Select objects to be masked:ExpandedNuclei
    Name the masked objects:MaskFilterExpandedNuclei
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Mask
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:10|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
    Select objects to be masked:MaskFilterExpandedNuclei
    Name the masked objects:MaskCropExpandedNuclei
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Mask
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:11|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
    Select objects to be masked:Nuclei
    Name the masked objects:MaskFilterUnexpandedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MaskFilterExpandedNuclei
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.9
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:12|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
    Select objects to be masked:MaskFilterUnexpandedNuclei
    Name the masked objects:MaskCropUnexpandedNuclei
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Mask
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskImage:[module_num:13|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
    Select the input image:Slc1a3
    Name the output image:Masked_Slc1a3
    Use objects or an image as a mask?:Image
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    Select image for mask:Mask
    Invert the mask?:Yes

RescaleIntensity:[module_num:14|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
    Select the input image:Masked_Slc1a3
    Name the output image:Rescale_Slc1a3
    Rescaling method:Divide each image by the same value
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    Divisor value:0.062485695
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
Threshold:[module_num:15|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
    Select the input image:Rescale_Slc1a3
    Name the output image:Threshold_Slc1a3
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.15
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
MeasureObjectIntensity:[module_num:16|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
    Select images to measure:Threshold_Slc1a3
    Select objects to measure:MaskCropExpandedNuclei

FilterObjects:[module_num:17|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
    Select the objects to filter:MaskCropExpandedNuclei
    Name the output objects:ExpandedAstrocytes
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_Slc1a3
    Filter using a minimum measurement value?:Yes
    Minimum value:0.07
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:18|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
    Select objects to be masked:MaskCropUnexpandedNuclei
    Name the masked objects:UnexpandedAstrocytes
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ExpandedAstrocytes
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Threshold_Slc1a3
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:red
    Select objects to display:MaskCropExpandedNuclei
    Select outline color:green
    Select objects to display:ExpandedAstrocytes

MaskImage:[module_num:20|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
    Select the input image:Olig2
    Name the output image:Masked_Olig2
    Use objects or an image as a mask?:Image
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    Select image for mask:Mask
    Invert the mask?:Yes

RescaleIntensity:[module_num:21|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
    Select the input image:Masked_Olig2
    Name the output image:Rescale_Olig2
    Rescaling method:Divide each image by the same value
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    Divisor value:0.062485695
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
Threshold:[module_num:22|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
    Select the input image:Rescale_Olig2
    Name the output image:Threshold_Olig2
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.13
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
MeasureObjectIntensity:[module_num:23|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
    Select images to measure:Threshold_Olig2
    Select objects to measure:MaskCropExpandedNuclei, UnexpandedAstrocytes

FilterObjects:[module_num:24|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
    Select the objects to filter:MaskCropExpandedNuclei
    Name the output objects:Oligodendrocytes
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_Olig2
    Filter using a minimum measurement value?:Yes
    Minimum value:0.05
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:25|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Threshold_Olig2
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:red
    Select objects to display:MaskCropExpandedNuclei
    Select outline color:#00FF40
    Select objects to display:Oligodendrocytes

MaskImage:[module_num:26|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
    Select the input image:Slc17a6
    Name the output image:Masked_Slc17a6
    Use objects or an image as a mask?:Image
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    Select image for mask:Mask
    Invert the mask?:Yes

RescaleIntensity:[module_num:27|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
    Select the input image:Masked_Slc17a6
    Name the output image:Rescale_Slc17a6
    Rescaling method:Divide each image by the same value
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    Divisor value:0.062485695
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
Smooth:[module_num:28|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
    Select the input image:Rescale_Slc17a6
    Name the output image:Smooth_Slc17a6
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
Threshold:[module_num:29|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
    Select the input image:Smooth_Slc17a6
    Name the output image:Threshold_Slc17a6
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.07
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
MeasureObjectIntensity:[module_num:30|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
    Select images to measure:Threshold_Slc17a6
    Select objects to measure:MaskCropExpandedNuclei, UnexpandedAstrocytes

FilterObjects:[module_num:31|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
    Select the objects to filter:MaskCropExpandedNuclei
    Name the output objects:Vglut2_Neurons
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_Slc17a6
    Filter using a minimum measurement value?:Yes
    Minimum value:0.075
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:32|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
    Select the objects to filter:UnexpandedAstrocytes
    Name the output objects:Astrocytes_Vglut2Neg
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_Slc17a6
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.5
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
OverlayOutlines:[module_num:33|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Threshold_Slc17a6
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:red
    Select objects to display:ExpandedNuclei
    Select outline color:green
    Select objects to display:Vglut2_Neurons

MaskImage:[module_num:34|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
    Select the input image:Slc17a7
    Name the output image:Masked_Slc17a7
    Use objects or an image as a mask?:Image
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    Select image for mask:Mask
    Invert the mask?:Yes

RescaleIntensity:[module_num:35|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
    Select the input image:Masked_Slc17a7
    Name the output image:Rescale_Slc17a7
    Rescaling method:Divide each image by the same value
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    Divisor value:0.062485695
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
Smooth:[module_num:36|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
    Select the input image:Rescale_Slc17a7
    Name the output image:Smooth_Slc17a7
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
Threshold:[module_num:37|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
    Select the input image:Smooth_Slc17a7
    Name the output image:Threshold_Slc17a7
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.1
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
MeasureObjectIntensity:[module_num:38|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
    Select images to measure:Threshold_Slc17a7
    Select objects to measure:Astrocytes_Vglut2Neg, MaskCropExpandedNuclei

FilterObjects:[module_num:39|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
    Select the objects to filter:MaskCropExpandedNuclei
    Name the output objects:Vglut1_Neurons
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_Slc17a7
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:40|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
    Select the objects to filter:Astrocytes_Vglut2Neg
    Name the output objects:Astrocytes_Vglut1Neg_Vglut2Neg
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_Slc17a7
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.5
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
OverlayOutlines:[module_num:41|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Threshold_Slc17a7
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:red
    Select objects to display:ExpandedNuclei
    Select outline color:green
    Select objects to display:Vglut1_Neurons

MaskImage:[module_num:42|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
    Select the input image:Gad2
    Name the output image:Masked_Gad2
    Use objects or an image as a mask?:Image
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    Select image for mask:Mask
    Invert the mask?:Yes

RescaleIntensity:[module_num:43|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
    Select the input image:Masked_Gad2
    Name the output image:Rescale_Gad2
    Rescaling method:Divide each image by the same value
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    Divisor value:0.062485695
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
Threshold:[module_num:44|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
    Select the input image:Rescale_Gad2
    Name the output image:Threshold_Gad2
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.13
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
MeasureObjectIntensity:[module_num:45|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
    Select images to measure:Threshold_Gad2
    Select objects to measure:Astrocytes_Vglut1Neg_Vglut2Neg, MaskCropExpandedNuclei

FilterObjects:[module_num:46|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
    Select the objects to filter:MaskCropExpandedNuclei
    Name the output objects:Gad2_Neurons
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_Gad2
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:47|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
    Select the objects to filter:Astrocytes_Vglut1Neg_Vglut2Neg
    Name the output objects:Astrocytes_Gad2Neg_Vglut1Neg_Vglut2Neg
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_Gad2
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.5
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
OverlayOutlines:[module_num:48|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Threshold_Gad2
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:red
    Select objects to display:ExpandedNuclei
    Select outline color:green
    Select objects to display:Gad2_Neurons

ExpandOrShrinkObjects:[module_num:49|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
    Select the input objects:Astrocytes_Gad2Neg_Vglut1Neg_Vglut2Neg
    Name the output objects:FilteredExpandedAstrocytes
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
MaskObjects:[module_num:50|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
    Select objects to be masked:FilteredExpandedAstrocytes
    Name the masked objects:FilteredExpandedCroppedAstrocytes
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Mask
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureObjectIntensity:[module_num:51|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
    Select images to measure:Smooth_Slc17a6, Smooth_Slc17a7, Threshold_Gad2, Threshold_Olig2, Threshold_Slc17a6, Threshold_Slc17a7, Threshold_Slc1a3
    Select objects to measure:ExpandedNuclei, FilteredExpandedCroppedAstrocytes, Gad2_Neurons, Oligodendrocytes, Vglut1_Neurons, Vglut2_Neurons

ExportToSpreadsheet:[module_num:52|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\all_marm_hiplex_blinded\\adult_flipped\\celltype\\csv_output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:cjadult_celltype_Scarlet_pfc_
    Overwrite existing files without warning?:No
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
ConvertObjectsToImage:[module_num:53|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
    Select the input objects:Gad2_Neurons
    Name the output image:Gad2_Neurons
    Select the color format:uint16
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
SaveImages:[module_num:54|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
    Select the type of image to save:Image
    Select the image to save:Gad2_Neurons
    Select method for constructing file names:Single name
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    Enter single file name:Scarlet_RH176_pfc_Gad2Neurons
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    Saved file format:tiff
    Output file location:Default Output Folder|Dropbox (MIT)\\scripts\\HiPlex_CellProfiler\\pilot_astro_images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:55|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
    Select the input objects:FilteredExpandedCroppedAstrocytes
    Name the output image:FilteredExpandedCroppedAstrocytes
    Select the color format:uint16
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
SaveImages:[module_num:56|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
    Select the type of image to save:Image
    Select the image to save:FilteredExpandedCroppedAstrocytes
    Select method for constructing file names:Single name
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    Enter single file name:Scarlet_RH176_pfc_FilteredExpandedCroppedAstrocytes
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    Saved file format:tiff
    Output file location:Default Output Folder|Dropbox (MIT)\\scripts\\HiPlex_CellProfiler\\pilot_astro_images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:57|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
    Select the input objects:MaskCropExpandedNuclei
    Name the output image:ExpandedNuclei
    Select the color format:uint16
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
SaveImages:[module_num:58|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
    Select the type of image to save:Image
    Select the image to save:ExpandedNuclei
    Select method for constructing file names:Single name
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    Enter single file name:Scarlet_RH176_pfc_ExpandedNuclei
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    Saved file format:tiff
    Output file location:Default Output Folder|Dropbox (MIT)\\scripts\\HiPlex_CellProfiler\\pilot_astro_images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:59|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
    Select the input objects:Nuclei
    Name the output image:Nuclei
    Select the color format:uint16
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
SaveImages:[module_num:60|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
    Select the type of image to save:Image
    Select the image to save:Nuclei
    Select method for constructing file names:Single name
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    Enter single file name:Scarlet_RH176_pfc_Nuclei
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    Saved file format:tiff
    Output file location:Default Output Folder|Dropbox (MIT)\\scripts\\HiPlex_CellProfiler\\pilot_astro_images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:61|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
    Select the input objects:Oligodendrocytes
    Name the output image:Oligodendrocytes
    Select the color format:uint16
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
SaveImages:[module_num:62|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
    Select the type of image to save:Image
    Select the image to save:Oligodendrocytes
    Select method for constructing file names:Single name
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    Enter single file name:Scarlet_RH176_pfc_Oligodendrocytes
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    Saved file format:tiff
    Output file location:Default Output Folder|Dropbox (MIT)\\scripts\\HiPlex_CellProfiler\\pilot_astro_images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:63|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
    Select the input objects:Vglut1_Neurons
    Name the output image:Vglut1_Neurons
    Select the color format:uint16
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
SaveImages:[module_num:64|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
    Select the type of image to save:Image
    Select the image to save:Vglut1_Neurons
    Select method for constructing file names:Single name
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    Enter single file name:Scarlet_RH176_pfc_Vglut1Neurons
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    Saved file format:tiff
    Output file location:Default Output Folder|Dropbox (MIT)\\scripts\\HiPlex_CellProfiler\\pilot_astro_images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:65|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
    Select the input objects:Vglut2_Neurons
    Name the output image:Vglut2_Neurons
    Select the color format:uint16
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
SaveImages:[module_num:66|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
    Select the type of image to save:Image
    Select the image to save:Vglut2_Neurons
    Select method for constructing file names:Single name
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    Enter single file name:Scarlet_RH176_pfc_Vglut2Neurons
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    Saved file format:tiff
    Output file location:Default Output Folder|Dropbox (MIT)\\scripts\\HiPlex_CellProfiler\\pilot_astro_images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:67|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
    Select the input objects:UnexpandedAstrocytes
    Name the output image:UnfilteredUnexpandedAstrocytes
    Select the color format:uint16
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
SaveImages:[module_num:68|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
    Select the type of image to save:Image
    Select the image to save:UnfilteredUnexpandedAstrocytes
    Select method for constructing file names:Single name
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    Enter single file name:Scarlet_RH176_pfc_UnfilteredExpandedAstrocytes
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    Saved file format:tiff
    Output file location:Default Output Folder|Dropbox (MIT)\\scripts\\HiPlex_CellProfiler\\pilot_astro_images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
