CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:104
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Mouse>.*)_(?P<Slide>.*)_(?P<Slice>.*)_(?P<region>.*)_(?P<Probe>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:10
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Astrocyte")
    Name to assign these images:Astrocyte_Image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "geneA")
    Name to assign these images:GeneA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "geneB")
    Name to assign these images:GeneB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "geneC")
    Name to assign these images:GeneC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "geneD")
    Name to assign these images:GeneD
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "geneE")
    Name to assign these images:GeneE
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "geneF")
    Name to assign these images:GeneF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "geneG")
    Name to assign these images:GeneG
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Nuclei")
    Name to assign these images:Nuclei_Image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "mask")
    Name to assign these images:Mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:Astrocyte_Image
    Name the output object:Astrocytes
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:6|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
    Select the input image:Nuclei_Image
    Name the output object:Nuclei
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

MaskImage:[module_num:7|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
    Select the input image:GeneA
    Name the output image:Masked_GeneA
    Use objects or an image as a mask?:Image
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    Select image for mask:Mask
    Invert the mask?:No

RescaleIntensity:[module_num:8|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
    Select the input image:Masked_GeneA
    Name the output image:Rescale_GeneA
    Rescaling method:Divide each image by the same value
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    Divisor value:0.062485695
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
Threshold:[module_num:9|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
    Select the input image:Rescale_GeneA
    Name the output image:Threshold_GeneA
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.139705283
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
MeasureObjectIntensity:[module_num:10|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
    Select images to measure:Threshold_GeneA
    Select objects to measure:Astrocytes, Nuclei

FilterObjects:[module_num:11|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
    Select the objects to filter:Astrocytes
    Name the output objects:GeneA_Astrocytes_mean
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_GeneA
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:12|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
    Select the objects to filter:Astrocytes
    Name the output objects:GeneA_Astrocytes_int
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Threshold_GeneA
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:13|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
    Select initial object set:GeneA_Astrocytes_int
    Select object set to combine:GeneA_Astrocytes_mean
    Select how to handle overlapping objects:Merge
    Name the combined object set:GeneA_Astrocytes

FilterObjects:[module_num:14|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
    Select the objects to filter:Nuclei
    Name the output objects:GeneA_Nuclei_mean
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_GeneA
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:15|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
    Select the objects to filter:Nuclei
    Name the output objects:GeneA_Nuclei_int
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Threshold_GeneA
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:16|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
    Select initial object set:GeneA_Nuclei_int
    Select object set to combine:GeneA_Nuclei_mean
    Select how to handle overlapping objects:Merge
    Name the combined object set:GeneA_Nuclei

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Threshold_GeneA
    Name the output image:GeneA_Outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Astrocytes
    Select outline color:Green
    Select objects to display:GeneA_Astrocytes

MaskImage:[module_num:18|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
    Select the input image:GeneB
    Name the output image:Masked_GeneB
    Use objects or an image as a mask?:Image
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    Select image for mask:Mask
    Invert the mask?:No

RescaleIntensity:[module_num:19|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
    Select the input image:Masked_GeneB
    Name the output image:Rescale_GeneB
    Rescaling method:Divide each image by the same value
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    Divisor value:0.062485695
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
EnhanceOrSuppressFeatures:[module_num:20|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enabled:False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
    Select the input image:Rescale_GeneB
    Name the output image:Despeckle_GeneB
    Select the operation:Suppress
    Feature size:4
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
Smooth:[module_num:21|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
    Select the input image:Rescale_GeneB
    Name the output image:Smooth_GeneB
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3.0
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
Threshold:[module_num:22|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
    Select the input image:Smooth_GeneB
    Name the output image:Threshold_GeneB
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.075
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
MeasureObjectIntensity:[module_num:23|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
    Select images to measure:Threshold_GeneB
    Select objects to measure:Astrocytes, Nuclei

FilterObjects:[module_num:24|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
    Select the objects to filter:Astrocytes
    Name the output objects:GeneB_Astrocytes_mean
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_GeneB
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:25|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
    Select the objects to filter:Astrocytes
    Name the output objects:GeneB_Astrocytes_int
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Threshold_GeneB
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:26|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
    Select initial object set:GeneB_Astrocytes_int
    Select object set to combine:GeneB_Astrocytes_mean
    Select how to handle overlapping objects:Merge
    Name the combined object set:GeneB_Astrocytes

FilterObjects:[module_num:27|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
    Select the objects to filter:Nuclei
    Name the output objects:GeneB_Nuclei_mean
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_GeneB
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:28|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
    Select the objects to filter:Nuclei
    Name the output objects:GeneB_Nuclei_int
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Threshold_GeneB
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:29|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
    Select initial object set:GeneB_Nuclei_int
    Select object set to combine:GeneB_Nuclei_mean
    Select how to handle overlapping objects:Merge
    Name the combined object set:GeneB_Nuclei

OverlayOutlines:[module_num:30|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Threshold_GeneB
    Name the output image:GeneB_outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Astrocytes
    Select outline color:Green
    Select objects to display:GeneB_Astrocytes

MaskImage:[module_num:31|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
    Select the input image:GeneC
    Name the output image:Masked_GeneC
    Use objects or an image as a mask?:Image
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    Select image for mask:Mask
    Invert the mask?:No

RescaleIntensity:[module_num:32|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
    Select the input image:Masked_GeneC
    Name the output image:Rescale_GeneC
    Rescaling method:Divide each image by the same value
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    Divisor value:0.062485695
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
Threshold:[module_num:33|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
    Select the input image:Rescale_GeneC
    Name the output image:Threshold_GeneC
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.084766097
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
MeasureObjectIntensity:[module_num:34|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
    Select images to measure:Threshold_GeneC
    Select objects to measure:Astrocytes, Nuclei

FilterObjects:[module_num:35|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
    Select the objects to filter:Astrocytes
    Name the output objects:GeneC_Astrocytes_mean
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_GeneC
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:36|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
    Select the objects to filter:Astrocytes
    Name the output objects:GeneC_Astrocytes_int
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Threshold_GeneC
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:37|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
    Select initial object set:GeneC_Astrocytes_mean
    Select object set to combine:GeneC_Astrocytes_int
    Select how to handle overlapping objects:Merge
    Name the combined object set:GeneC_Astrocytes

FilterObjects:[module_num:38|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
    Select the objects to filter:Nuclei
    Name the output objects:GeneC_Nuclei_mean
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_GeneC
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:39|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
    Select the objects to filter:Nuclei
    Name the output objects:GeneC_Nuclei_int
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Threshold_GeneC
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:40|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
    Select initial object set:GeneC_Nuclei_int
    Select object set to combine:GeneC_Nuclei_mean
    Select how to handle overlapping objects:Merge
    Name the combined object set:GeneC_Nuclei

OverlayOutlines:[module_num:41|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Threshold_GeneC
    Name the output image:GeneC_Outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Astrocytes
    Select outline color:Green
    Select objects to display:GeneC_Astrocytes

MaskImage:[module_num:42|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
    Select the input image:GeneD
    Name the output image:Masked_GeneD
    Use objects or an image as a mask?:Image
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    Select image for mask:Mask
    Invert the mask?:No

RescaleIntensity:[module_num:43|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
    Select the input image:Masked_GeneD
    Name the output image:Rescale_GeneD
    Rescaling method:Divide each image by the same value
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    Divisor value:0.062485695
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
Threshold:[module_num:44|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
    Select the input image:Rescale_GeneD
    Name the output image:Threshold_GeneD
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.064396117
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
MeasureObjectIntensity:[module_num:45|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
    Select images to measure:Threshold_GeneD
    Select objects to measure:Astrocytes, Nuclei

FilterObjects:[module_num:46|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
    Select the objects to filter:Astrocytes
    Name the output objects:GeneD_Astrocytes_mean
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_GeneD
    Filter using a minimum measurement value?:Yes
    Minimum value:0.02
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:47|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
    Select the objects to filter:Astrocytes
    Name the output objects:GeneD_Astrocytes_int
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Threshold_GeneD
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:48|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
    Select initial object set:GeneD_Astrocytes_int
    Select object set to combine:GeneD_Astrocytes_mean
    Select how to handle overlapping objects:Merge
    Name the combined object set:GeneD_Astrocytes

FilterObjects:[module_num:49|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
    Select the objects to filter:Nuclei
    Name the output objects:GeneD_Nuclei_mean
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_GeneD
    Filter using a minimum measurement value?:Yes
    Minimum value:0.02
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:50|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
    Select the objects to filter:Nuclei
    Name the output objects:GeneD_Nuclei_int
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Threshold_GeneD
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:51|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
    Select initial object set:GeneD_Nuclei_int
    Select object set to combine:GeneD_Nuclei_mean
    Select how to handle overlapping objects:Merge
    Name the combined object set:GeneD_Nuclei

OverlayOutlines:[module_num:52|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Threshold_GeneD
    Name the output image:GeneD_Outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Astrocytes
    Select outline color:Green
    Select objects to display:GeneD_Astrocytes

MaskImage:[module_num:53|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
    Select the input image:GeneE
    Name the output image:Masked_GeneE
    Use objects or an image as a mask?:Image
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    Select image for mask:Mask
    Invert the mask?:No

RescaleIntensity:[module_num:54|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
    Select the input image:Masked_GeneE
    Name the output image:Rescale_GeneE
    Rescaling method:Divide each image by the same value
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    Divisor value:0.062485695
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
EnhanceOrSuppressFeatures:[module_num:55|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enabled:False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
    Select the input image:Rescale_GeneE
    Name the output image:Despeckled_GeneE
    Select the operation:Suppress
    Feature size:4
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
Threshold:[module_num:56|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
    Select the input image:Rescale_GeneE
    Name the output image:Threshold_GeneE
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.138213042
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
MeasureObjectIntensity:[module_num:57|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
    Select images to measure:Threshold_GeneE
    Select objects to measure:Astrocytes, Nuclei

FilterObjects:[module_num:58|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
    Select the objects to filter:Astrocytes
    Name the output objects:GeneE_Astrocytes_mean
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_GeneE
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:59|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
    Select the objects to filter:Astrocytes
    Name the output objects:GeneE_Astrocytes_int
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Threshold_GeneE
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:60|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
    Select initial object set:GeneE_Astrocytes_int
    Select object set to combine:GeneE_Astrocytes_mean
    Select how to handle overlapping objects:Merge
    Name the combined object set:GeneE_Astrocytes

FilterObjects:[module_num:61|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
    Select the objects to filter:Nuclei
    Name the output objects:GeneE_Nuclei_mean
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_GeneE
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:62|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
    Select the objects to filter:Nuclei
    Name the output objects:GeneE_Nuclei_int
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Threshold_GeneE
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:63|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
    Select initial object set:GeneE_Nuclei_int
    Select object set to combine:GeneE_Nuclei_mean
    Select how to handle overlapping objects:Merge
    Name the combined object set:GeneE_Nuclei

OverlayOutlines:[module_num:64|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Threshold_GeneE
    Name the output image:GeneE_outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Astrocytes
    Select outline color:Green
    Select objects to display:GeneE_Astrocytes

MaskImage:[module_num:65|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
    Select the input image:GeneF
    Name the output image:Masked_GeneF
    Use objects or an image as a mask?:Image
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    Select image for mask:Mask
    Invert the mask?:No

RescaleIntensity:[module_num:66|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
    Select the input image:Masked_GeneF
    Name the output image:Rescale_GeneF
    Rescaling method:Divide each image by the same value
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    Divisor value:0.062485695
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
Threshold:[module_num:67|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
    Select the input image:Rescale_GeneF
    Name the output image:Threshold_GeneF
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.112183065
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
MeasureObjectIntensity:[module_num:68|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
    Select images to measure:Threshold_GeneF
    Select objects to measure:Astrocytes, Nuclei

FilterObjects:[module_num:69|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
    Select the objects to filter:Astrocytes
    Name the output objects:GeneF_Astrocytes_mean
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_GeneF
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:70|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
    Select the objects to filter:Astrocytes
    Name the output objects:GeneF_Astrocytes_int
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Threshold_GeneF
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:71|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
    Select initial object set:GeneF_Astrocytes_int
    Select object set to combine:GeneF_Astrocytes_mean
    Select how to handle overlapping objects:Merge
    Name the combined object set:GeneF_Astrocytes

FilterObjects:[module_num:72|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
    Select the objects to filter:Nuclei
    Name the output objects:GeneF_Nuclei_mean
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_GeneF
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:73|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
    Select the objects to filter:Nuclei
    Name the output objects:GeneF_Nuclei_int
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Threshold_GeneF
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:74|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
    Select initial object set:GeneF_Nuclei_int
    Select object set to combine:GeneF_Nuclei_mean
    Select how to handle overlapping objects:Merge
    Name the combined object set:GeneF_Nuclei

OverlayOutlines:[module_num:75|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Threshold_GeneF
    Name the output image:GeneF_Outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Astrocytes
    Select outline color:Green
    Select objects to display:GeneF_Astrocytes

MaskImage:[module_num:76|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
    Select the input image:GeneG
    Name the output image:Masked_GeneG
    Use objects or an image as a mask?:Image
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    Select image for mask:Mask
    Invert the mask?:No

RescaleIntensity:[module_num:77|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
    Select the input image:Masked_GeneG
    Name the output image:Rescale_GeneG
    Rescaling method:Divide each image by the same value
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    Divisor value:0.062485695
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
Threshold:[module_num:78|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
    Select the input image:Rescale_GeneG
    Name the output image:Threshold_GeneG
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.193359375
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
MeasureObjectIntensity:[module_num:79|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
    Select images to measure:Threshold_GeneG
    Select objects to measure:Astrocytes, Nuclei

FilterObjects:[module_num:80|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
    Select the objects to filter:Astrocytes
    Name the output objects:GeneG_Astrocytes_mean
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_GeneG
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:81|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
    Select the objects to filter:Astrocytes
    Name the output objects:GeneG_Astrocytes_int
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Threshold_GeneG
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:82|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
    Select initial object set:GeneG_Astrocytes_int
    Select object set to combine:GeneG_Astrocytes_mean
    Select how to handle overlapping objects:Merge
    Name the combined object set:GeneG_astrocytes

FilterObjects:[module_num:83|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
    Select the objects to filter:Nuclei
    Name the output objects:GeneG_Nuclei_mean
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_GeneG
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:84|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
    Select the objects to filter:Nuclei
    Name the output objects:GeneG_Nuclei_int
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Threshold_GeneG
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:85|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
    Select initial object set:GeneG_Nuclei_int
    Select object set to combine:GeneG_Nuclei_mean
    Select how to handle overlapping objects:Merge
    Name the combined object set:GeneG_Nuclei

OverlayOutlines:[module_num:86|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Threshold_GeneG
    Name the output image:GeneG_outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Astrocytes
    Select outline color:Green
    Select objects to display:GeneG_astrocytes

ExportToSpreadsheet:[module_num:87|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\all_mouse_hiplex_blinded\\mmP90_rDEG\\counts_output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:rDEG_tele_150_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:88|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
    Select the type of image to save:Image
    Select the image to save:GeneA_Outlines
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:GeneA_Outlines_
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|D:\\all_mouse_hiplex_blinded\\mmP90_rDEG\\image_output\\exp150_tele
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:89|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
    Select the type of image to save:Image
    Select the image to save:GeneB_outlines
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:GeneB_Outlines_
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|D:\\all_mouse_hiplex_blinded\\mmP90_rDEG\\image_output\\exp150_tele
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:90|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
    Select the type of image to save:Image
    Select the image to save:GeneC_Outlines
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:GeneC_Outlines_
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|D:\\all_mouse_hiplex_blinded\\mmP90_rDEG\\image_output\\exp150_tele
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:91|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
    Select the type of image to save:Image
    Select the image to save:GeneD_Outlines
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:GeneD_Outlines_
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|D:\\all_mouse_hiplex_blinded\\mmP90_rDEG\\image_output\\exp150_tele
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:92|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
    Select the type of image to save:Image
    Select the image to save:GeneE_outlines
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:GeneE_outlines_
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|D:\\all_mouse_hiplex_blinded\\mmP90_rDEG\\image_output\\exp150_tele
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:93|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
    Select the type of image to save:Image
    Select the image to save:GeneF_Outlines
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:GeneF_outlines_
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|image_output\\exp150_tele
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:94|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
    Select the type of image to save:Image
    Select the image to save:GeneG_outlines
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:GeneG_Outlines_
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|image_output\\exp150_tele
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:95|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
    Select the type of image to save:Image
    Select the image to save:Threshold_GeneG
    Select method for constructing file names:Sequential numbers
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    Enter single file name:Threshold_GeneG_
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|image_output\\exp150_tele
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:96|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
    Select the type of image to save:Image
    Select the image to save:Threshold_GeneF
    Select method for constructing file names:Sequential numbers
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    Enter single file name:Threshold_GeneF_
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|image_output\\exp150_tele
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:97|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Despeckled_GeneE
    Select method for constructing file names:Sequential numbers
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    Enter single file name:Despeckled_GeneE_
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|image_output\\exp150_thal
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:98|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
    Select the type of image to save:Image
    Select the image to save:Threshold_GeneE
    Select method for constructing file names:Sequential numbers
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    Enter single file name:Threshold_GeneE_
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|image_output\\exp150_tele
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:99|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
    Select the type of image to save:Image
    Select the image to save:Threshold_GeneD
    Select method for constructing file names:Sequential numbers
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    Enter single file name:Threshold_GeneD_
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|image_output\\exp150_tele
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:100|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
    Select the type of image to save:Image
    Select the image to save:Threshold_GeneC
    Select method for constructing file names:Sequential numbers
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    Enter single file name:Threshold_GeneC_
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|image_output\\exp150_tele
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:101|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
    Select the type of image to save:Image
    Select the image to save:Threshold_GeneB
    Select method for constructing file names:Sequential numbers
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    Enter single file name:Threshold_GeneB_
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|image_output\\exp150_tele
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:102|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
    Select the type of image to save:Image
    Select the image to save:Smooth_GeneB
    Select method for constructing file names:Sequential numbers
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    Enter single file name:Smooth_GeneB_
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|image_output\\exp150_tele
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:103|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Despeckle_GeneB
    Select method for constructing file names:Sequential numbers
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    Enter single file name:Despeckle_GeneB_
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|image_output\\exp150_thal
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:104|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
    Select the type of image to save:Image
    Select the image to save:Threshold_GeneA
    Select method for constructing file names:Sequential numbers
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    Enter single file name:Threshold_GeneA_
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|image_output\\exp150_tele
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
