CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:37
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Animal>.*)_(?P<Section>.*)_(?P<Region>.*)_(?P<Probe>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'DAPI': 'Animal', 'GeneA': 'Animal', 'GeneB': 'Animal', 'Slc1a3': 'Animal'}, {'DAPI': 'Section', 'GeneA': 'Section', 'GeneB': 'Section', 'Slc1a3': 'Section'}, {'DAPI': 'Region', 'GeneA': 'Region', 'GeneB': 'Region', 'Slc1a3': 'Region'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "geneA")
    Name to assign these images:GeneA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "SLC1A3")
    Name to assign these images:Slc1a3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "geneB")
    Name to assign these images:GeneB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DAPI
    Name the output image:Rescale_DAPI
    Rescaling method:Stretch each image to use the full intensity range
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
Smooth:[module_num:6|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
    Select the input image:Rescale_DAPI
    Name the output image:Smooth_DAPI
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Smooth_DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):6,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:7
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the output objects:ExpandedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
RescaleIntensity:[module_num:9|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
    Select the input image:Slc1a3
    Name the output image:Rescale_Slc1a3
    Rescaling method:Divide each image by the same value
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    Divisor value:0.062485695
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
Threshold:[module_num:10|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
    Select the input image:Rescale_Slc1a3
    Name the output image:Threshold_Slc1a3
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.95
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:11|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
    Select images to measure:Threshold_Slc1a3
    Select objects to measure:ExpandedNuclei

FilterObjects:[module_num:12|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
    Select the objects to filter:ExpandedNuclei
    Name the output objects:ExpandedAstro
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_Slc1a3
    Filter using a minimum measurement value?:Yes
    Minimum value:0.15
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Threshold_Slc1a3
    Name the output image:Astro_Outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:red
    Select objects to display:ExpandedNuclei
    Select outline color:green
    Select objects to display:ExpandedAstro

RescaleIntensity:[module_num:14|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
    Select the input image:GeneA
    Name the output image:Rescale_GeneA
    Rescaling method:Divide each image by the same value
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    Divisor value:0.062485695
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
Threshold:[module_num:15|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
    Select the input image:Rescale_GeneA
    Name the output image:Threshold_GeneA
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.18
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
MeasureObjectIntensity:[module_num:16|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
    Select images to measure:Threshold_GeneA
    Select objects to measure:ExpandedAstro, ExpandedNuclei

FilterObjects:[module_num:17|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
    Select the objects to filter:ExpandedAstro
    Name the output objects:GeneA_Astro_mean
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_GeneA
    Filter using a minimum measurement value?:Yes
    Minimum value:0.05
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:18|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
    Select the objects to filter:ExpandedAstro
    Name the output objects:GeneA_Astro_int
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Threshold_GeneA
    Filter using a minimum measurement value?:Yes
    Minimum value:10
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:19|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
    Select initial object set:GeneA_Astro_int
    Select object set to combine:GeneA_Astro_mean
    Select how to handle overlapping objects:Merge
    Name the combined object set:GeneA_Astro

FilterObjects:[module_num:20|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
    Select the objects to filter:ExpandedNuclei
    Name the output objects:GeneA_nuclei_mean
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_GeneA
    Filter using a minimum measurement value?:Yes
    Minimum value:0.05
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:21|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
    Select the objects to filter:ExpandedNuclei
    Name the output objects:GeneA_nuclei_int
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Threshold_GeneA
    Filter using a minimum measurement value?:Yes
    Minimum value:10
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:22|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
    Select initial object set:GeneA_nuclei_int
    Select object set to combine:GeneA_nuclei_mean
    Select how to handle overlapping objects:Merge
    Name the combined object set:GeneA_Nuclei

OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Threshold_GeneA
    Name the output image:GeneA_Astro_Outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:ExpandedAstro
    Select outline color:Green
    Select objects to display:GeneA_Astro

RescaleIntensity:[module_num:24|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
    Select the input image:GeneB
    Name the output image:Rescale_GeneB
    Rescaling method:Divide each image by the same value
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    Divisor value:0.062485695
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
Threshold:[module_num:25|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
    Select the input image:Rescale_GeneB
    Name the output image:Threshold_GeneB
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.14
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
MeasureObjectIntensity:[module_num:26|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
    Select images to measure:Threshold_GeneB
    Select objects to measure:ExpandedAstro, ExpandedNuclei

FilterObjects:[module_num:27|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
    Select the objects to filter:ExpandedAstro
    Name the output objects:GeneB_Astro_mean
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_GeneB
    Filter using a minimum measurement value?:Yes
    Minimum value:0.05
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:28|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
    Select the objects to filter:ExpandedAstro
    Name the output objects:GeneB_Astro_int
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Threshold_GeneB
    Filter using a minimum measurement value?:Yes
    Minimum value:10
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:29|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
    Select initial object set:GeneB_Astro_int
    Select object set to combine:GeneB_Astro_mean
    Select how to handle overlapping objects:Merge
    Name the combined object set:GeneB_Astro

FilterObjects:[module_num:30|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
    Select the objects to filter:ExpandedNuclei
    Name the output objects:GeneB_nuclei_mean
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Threshold_GeneB
    Filter using a minimum measurement value?:Yes
    Minimum value:0.05
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:31|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
    Select the objects to filter:ExpandedNuclei
    Name the output objects:GeneB_nuclei_int
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Threshold_GeneB
    Filter using a minimum measurement value?:Yes
    Minimum value:10
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:32|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
    Select initial object set:GeneB_nuclei_int
    Select object set to combine:GeneB_nuclei_mean
    Select how to handle overlapping objects:Merge
    Name the combined object set:GeneB_Nuclei

OverlayOutlines:[module_num:33|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Threshold_GeneB
    Name the output image:GeneB_Astro_Outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:ExpandedAstro
    Select outline color:Green
    Select objects to display:GeneB_Astro

MeasureObjectIntensity:[module_num:34|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
    Select images to measure:Threshold_GeneA, Threshold_GeneB, Threshold_Slc1a3
    Select objects to measure:ExpandedAstro, ExpandedNuclei, GeneA_Astro, GeneA_Nuclei, GeneB_Astro, GeneB_Nuclei

ExportToSpreadsheet:[module_num:35|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\sDEG_cp\\csv_output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:sDEG_v2_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:GeneA_Astro_Outlines
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:GeneA_Astro_Outlines
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:37|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
    Select the type of image to save:Image
    Select the image to save:GeneB_Astro_Outlines
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:GeneB_Astro_Outlines
    Number of digits:2
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
